begin model

begin parameters
  	Ca_i 10000 # Initial number of Ca molecules/cell
	CaM_i 2000  # Initial number of CaM molecules/cell
	CaMKII_i 2000  # Initial number of CaMKII molecules/cell

    NA_um3 6.022e8 # Avogadro's number mutiplied by 1e-15 since we are using volume units of microns(^-3)

    # R1 to R4:  
 	kon_CaCaM 1e+6/NA_um3   # Bimolecular rate constant for CaM-Ca binding (1/# 1/s)
	koff_1Ca 1.928   # Unimolecular rate constant for CaM_Ca unbinding (1/s)
	koff_2Ca 1.937
	koff_3Ca 7.476
	koff_4Ca 25.783

	# 5.1 CaMKII + CaM_Ca4 < - > CaMKII_CaM
	kon_cam_ca4_camkii 4.2e+6/NA_um3  
	koff_cam_ca4_camkii 2.5e-4

    # CaMKII flicker active/inactive
    kon_camkii_act 2e+4
	koff_camkii_inact 1e+7

	# CaMKII phosphorylation
	k_pCaM4 = 0.96 #1/s #ref ordyan #1e5 in monomer model for susana's diss

	# Dephosphorylation ordyan
	# k_cat = (31/1.25)/60 # where do these numbers come from?
	# K_m = 11*(NA*V) #uM 

	k_dephos_camkii_p 3e+3/NA_um3  # reaction number (8) on diss
end parameters

begin molecule types
  Ca()
  PP1()
  CaM(ca~0~1~2~3~4,camkii)
  CaMKII(docked~y~n,active~0~1,T286~0~P,S306~0~P,cam,nmdar,l,r,c)
end molecule types

begin compartments
end compartments

begin species
Ca() Ca_i
CaM(ca~0,camkii) CaM_i
# CaMKII hexamer: CaMKII_i
CaMKII(cam,nmdar,T286~0,S306~0,active~0,docked~y,l!6,r!1,c).CaMKII(cam,nmdar,T286~0,S306~0,active~0,docked~y,l!1,r!2,c).CaMKII(cam,nmdar,T286~0,S306~0,active~0,docked~y,l!2,r!3,c).CaMKII(cam,nmdar,T286~0,S306~0,active~0,docked~y,l!3,r!4,c).CaMKII(cam,nmdar,T286~0,S306~0,active~0,docked~y,l!4,r!5,c).CaMKII(cam,nmdar,T286~0,S306~0,active~0,docked~y,l!5,r!6,c) CaMKII_i
# CaMKII dodecamer as per Ordyan's model:
# CaMKII(docked~y,active~0,r!1,l!6,c!13,T286~0,S306~0,nmdar,cam).CaMKII(docked~y,active~0,r!2,l!1,c!14,T286~0,S306~0,nmdar,cam).\
# CaMKII(docked~y,active~0,r!3,l!2,c!15,T286~0,S306~0,nmdar,cam).CaMKII(docked~y,active~0,r!4,l!3,c!16,T286~0,S306~0,nmdar,cam).\
# CaMKII(docked~y,active~0,r!5,l!4,c!17,T286~0,S306~0,nmdar,cam).CaMKII(docked~y,active~0,r!6,l!5,c!18,T286~0,S306~0,nmdar,cam).\
# CaMKII(docked~y,active~0,r!7,l!12,c!13,T286~0,S306~0,nmdar,cam).CaMKII(docked~y,active~0,r!8,l!7,c!14,T286~0,S306~0,nmdar,cam).\
# CaMKII(docked~y,active~0,r!9,l!8,c!15,T286~0,S306~0,nmdar,cam).CaMKII(docked~y,active~0,r!10,l!9,c!16,T286~0,S306~0,nmdar,cam).\
# CaMKII(docked~y,active~0,r!11,l!10,c!17,T286~0,S306~0,nmdar,cam).CaMKII(docked~y,active~0,r!12,l!11,c!18,T286~0,S306~0,nmdar,cam) CaMKII_i
end species

begin observables
end observables

begin functions
end functions

begin reaction rules
# Ca binds to CaM progresively
#1  Ca + CaM < - > CaM_Ca1
	CaM(ca~0,camkii) + Ca() <-> CaM(ca~1,camkii) kon_CaCaM, koff_1Ca
#2  Ca + CaM_Ca1 < - > CaM_Ca2
 	CaM(ca~1,camkii) + Ca() <-> CaM(ca~2,camkii) kon_CaCaM, koff_2Ca
#3  Ca + CaM_Ca2 < - > CaM_Ca3
	CaM(ca~2,camkii) + Ca() <-> CaM(ca~3,camkii) kon_CaCaM, koff_3Ca
#4  Ca + CaM_Ca3 < - > CaM_Ca4
	CaM(ca~3,camkii) + Ca() <-> CaM(ca~4,camkii) kon_CaCaM, koff_4Ca

# Saturated CaM_Ca4 binds to CaMKII ring
#5.1 CaMKII + CaM_Ca4 < - > CaMKII_CaM
### DOCKED NEEDS TO BE ADDED OR NOT?
	CaM(ca~4,camkii) + CaMKII(cam,T286~0,nmdar,active~1) <-> CaM(ca~4,camkii!1).CaMKII(cam!1,T286~0,nmdar,active~1) kon_cam_ca4_camkii, koff_cam_ca4_camkii

# CaMKII subunits can flicker between active or inactive. (CaM binds to active CaMKII only)
 	CaMKII(cam,T286~0,nmdar,active~0) <-> CaMKII(cam,T286~0,nmdar,active~1) kon_camkii_act, koff_camkii_inact

# CaMKII phosphorylation
# When CaMKII_CaM, neighbpuring subunit if bould to CaM can P
	CaMKII(l!1,T286~0,cam!2).CaM(ca~4,camkii!2).CaMKII(r!1,cam!+) -> CaMKII(l!1,T286~P,cam!2).CaM(ca~4,camkii!2).CaMKII(r!1,cam!+) k_pCaM4
# When CaMKII_CaM_P, can phosphorylate neighbouring subunit
  	CaMKII(l!1,T286~0,cam!2).CaM(ca~4,camkii!2).CaMKII(r!1,T286~P) -> CaMKII(l!1,T286~P,cam!2).CaM(ca~4,camkii!2).CaMKII(r!1,T286~P) k_pCaM4	

# CaMKII dephosphorylation
	CaMKII(Y286~P) + PP1 -> CaMKII(Y286~0) + PP1 k_dephos_camkii_p
end reaction rules

begin observables
  	Molecules CaM_free CaM(ca~0,camkii)
	Molecules CaM_Ca1 CaM(ca~1,camkii)
	Molecules CaM_Ca2 CaM(ca~2,camkii)
	Molecules CaM_Ca3 CaM(ca~3,camkii)
	Molecules CaM_Ca4 CaM(ca~4,camkii)

    Molecules CaMKII_inactive CaMKII(cam,T286~0,active~0)
	Molecules CaMKII_active CaMKII(T286~0,active~1)
	Molecules CaMKII_P CaMKII(T286~P)
end observables


end model

simulate({method=>"ssa",t_end=>1e3,n_steps=>1000})